PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEAL_LandTrav
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the SEAL Landmark Traversal Task
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        In this task, you are presented with a picture of an object

        Your task is to find the object

        Press Start to begin!
    ButtonComponent Start_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-.18)
      size = (.4,.2)
      startVal [time (s)] = 0
      text = Start
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Thank you for participating in the SEAL Landmark Traversal Task
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  Routine Upper_trial
    ImageComponent image
      image [set every repeat] = $imageU
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please find this object
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    ButtonComponent yes_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.2, -.4)
      size = .25,.15
      startVal [time (s)] = 0
      text [set every repeat] = Yes
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    ButtonComponent no_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.2, -.4)
      size = .25,.15
      startVal [time (s)] = 0
      text [set every repeat] = No
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  Routine routine_500
  Routine blank
  Routine Trial
    ImageComponent Landmark
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
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      text:
        Please find this object
    ButtonComponent yesbutton
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.2, -.4)
      size = (.25, .15)
      startVal [time (s)] = 0
      text [set every repeat] = Yes
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    ButtonComponent nobutton
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -.4)
      size = (.25,.15)
      startVal [time (s)] = 0
      text [set every repeat] = No
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Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = LandmarkTrav_Stimuli.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'TravImages/Landmark_1.JPG'},
      {'image': 'TravImages/Landmark_2.JPG'},
      {'image': 'TravImages/Landmark_3.JPG'},
      {'image': 'TravImages/Landmark_4.JPG'},
      {'image': 'TravImages/Landmark_5.JPG'},
      {'image': 'TravImages/Landmark_6.JPG'},
      {'image': 'TravImages/Landmark_7.JPG'},
      {'image': 'TravImages/Landmark_8.JPG'},
      {'image': 'TravImages/Landmark_9.JPG'},
      {'image': 'TravImages/Landmark_10.JPG'},
      {'image': 'TravImages/Landmark_11.JPG'},
      {'image': 'TravImages/Landmark_12.JPG'}]
    Routine Trial
  LoopTerminator trials
  Routine End
